PsychoPy2experiment version="1.90.3"
Settings
  expName = demo
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  Units = norm
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        sys.path.insert(0, os.path.join('..', '..')) # to load module from neighbouring folder
        import motbox as pymot

        track_filename = os.path.join('tracks', 'T220.csv')
      Begin Routine:
        T = pymot.Track()
        T.load_from_csv(track_filename)
        T.scale(30) # px per inch

        P = pymot.Puppeteer()
        P.track = T
        P.clone_template_psychopy(p1_template, 4)
      Each Frame:
        stop_time = 4
        if t >= 0 and t <= stop_time:
            map(lambda x: x.setAutoDraw(True), P.objects)
            P.update_positions_psychopy(t)

        if t > stop_time and t <= (stop_time + 1):
            map(lambda x: x.setAutoDraw(True), P.objects)
            P.update_positions_psychopy(4)

        if t > (stop_time + 1):
            map(lambda x: x.setAutoDraw(False), P.objects)
    ImageComponent p2_template
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
      pos = (10000, 10000)
      size = (64, 64)
      image = img/happy-50-green.png
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    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      allowedKeys = 'space'
      store = nothing
      forceEndRoutine = True
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    PolygonComponent p1_template
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      size = (0.5, 0.5)
      shape = rectangle
      fillColor = $[1,1,1]
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Flow
  Routine trial
